PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = False
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent agentLogic
      Code Type = Auto->JS
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      Begin Routine:
        choice = emotionKey.keys

        if choice == '1':
            agent_reply = "😊 Happy Agent: That sounds wonderful!"

        elif choice == '2':
            agent_reply = "😬 Anxious Agent: That worry makes sense."

        elif choice == '3':
            agent_reply = "😢 Sad Agent: That sounds really hard."

        elif choice == '4':
            agent_reply = "😠 Angry Agent: Your feelings are valid."

        else:
            agent_reply = "No emotion selected."
    KeyboardComponent nextKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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    TextboxComponent aiReply
      startVal [time (s)] = 0
      size = [0.5,0.5]
      editable = False
      text [set every repeat] = $agent_reply
      letterHeight = 0.05
      lineSpacing = 1
      bold = False
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  Routine welcome
    RoutineSettingsComponent welcome
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      desc:
        Emotion-Based Agentic AI

        Press SPACE to continue
    TextComponent welcomeText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Emotion-Based Agentic AI

        Press SPACE to continue
    KeyboardComponent spaceKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine emotion
    RoutineSettingsComponent emotion
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      desc:
        Choose Emotion

        1 = Happy
        2 = Anxious
        3 = Sad
        4 = Angry
    TextComponent emotionText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Choose Emotion

        1 = Happy 😊
        2 = Anxious 😬
        3 = Sad 😢
        4 = Angry 😠
    KeyboardComponent emotionKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 1,2,3,4
      storeCorrect = True
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Flow
  Routine welcome
  Routine emotion
  Routine trial
